CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Import image sets with two images per set: 1. DNA, 2 ppErk']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:ppErk
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageIntensity:[module_num:5|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
    Select the image to measure:DNA
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:ppErk
    Measure the intensity only from areas enclosed by objects?:No
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
DisplayDataOnImage:[module_num:6|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notes:['Display the lower quartile pixel intensity on the DNA image. verify that this represents typical background']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enabled:False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
    Display object or image measurements?:Image
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    Measurement to display:Intensity_LowerQuartileIntensity_DNA
    Select the image on which to display the measurements:DNA
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:7|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notes:['Display the lower quartile pixel intensity on the ppErk image. verify that this represents typical background']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enabled:False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
    Display object or image measurements?:Image
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    Measurement to display:Intensity_LowerQuartileIntensity_ppErk
    Select the image on which to display the measurements:ppErk
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ImageMath:[module_num:8|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notes:['Subtract background (lower quartile intensity) from the DNA image']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:dnaAfterMath
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_LowerQuartileIntensity_DNA

ImageMath:[module_num:9|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notes:['Subtract background (lower quartile intensity) from the ppErk image']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:erkAfterMath
    Image or measurement?:Image
    Select the first image:ppErk
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_LowerQuartileIntensity_ppErk

Smooth:[module_num:10|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notes:['Smooth the DNA image before segmentation.  Can be useful for optimal segmentation']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enabled:False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
    Select the input image:dnaAfterMath
    Name the output image:smoothedDNA
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Segment the nuclei']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
    Select the input image:dnaAfterMath
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):17,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:12|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notes:['Identify the cytoplasm by expanding the nuclear mask by 5 pixels', '']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cyto
    Select the method to identify the secondary objects:Distance - B
    Select the input image:dnaAfterMath
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0
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
IdentifyTertiaryObjects:[module_num:13|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notes:['Create a cytoplasmic ring by subtracting the nuclear mask from the cyto mask']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
    Select the larger identified objects:Cyto
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cyto_noNuc
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:14|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notes:['Measure the objects in each image']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
    Hidden:2
    Select an image to measure:dnaAfterMath
    Select an image to measure:erkAfterMath
    Select objects to measure:Nuclei
    Select objects to measure:Cyto_noNuc
    Select objects to measure:Cyto

MeasureObjectSizeShape:[module_num:15|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notes:['Measure nuclear size features']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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:16|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#0080FF
    Select objects to display:Nuclei
    Select outline color:green
    Select objects to display:Cyto_noNuc

SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder|

ExportToSpreadsheet:[module_num:18|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notes:['Select parameters to export, then export. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cyto_noNuc|Intensity_IntegratedIntensity_erkAfterMath,Cyto_noNuc|Intensity_IntegratedIntensity_dnaAfterMath,Cyto_noNuc|Intensity_MeanIntensity_erkAfterMath,Cyto_noNuc|Intensity_MeanIntensity_dnaAfterMath,Cyto_noNuc|Intensity_MedianIntensity_erkAfterMath,Cyto_noNuc|Intensity_MedianIntensity_dnaAfterMath,Cyto_noNuc|Number_Object_Number,Cyto|Number_Object_Number,Cyto|Intensity_IntegratedIntensity_erkAfterMath,Cyto|Intensity_MedianIntensity_erkAfterMath,Cyto|Intensity_MeanIntensity_erkAfterMath,Image|Count_Nuclei,Image|FileName_DNA,Image|FileName_ppErk,Nuclei|Number_Object_Number,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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